CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Instrument>.*)_(?P<Plate>.*)_(?P<Well>[A-Za-z][0-9]{1,2})f(?P<Site>[0-9]{1,2})d(?P<ChannelNumber>[0-2])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:Cell_original
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "0")
    Name to assign these images:Nucleus_original
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "png")
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    Name to assign these objects:Nucleus_png
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Nucleus_original
    Name the output image:Illum_nucleus
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:Nucleus_original
    Name the output image:Corr_Nucleus
    Select the illumination function:Illum_nucleus
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

FilterObjects:[module_num:7|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
    Select the objects to filter:Nucleus_png
    Name the output objects:FilterObjects1
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
MeasureObjectIntensity:[module_num:8|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
    Select images to measure:Nucleus_original
    Select objects to measure:FilterObjects1

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:Nucleus_png
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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
    Select the objects to filter:Nucleus_png
    Name the output objects:FilterObjects_nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:No
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
CorrectIlluminationCalculate:[module_num:11|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
    Select the input image:Cell_original
    Name the output image:Illum_Cell
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:12|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
    Select the input image:Cell_original
    Name the output image:Corr_Cell
    Select the illumination function:Illum_Cell
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:FilterObjects_nuclei
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:Corr_Cell
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:5.0
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.009,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.08
    Upper outlier fraction:0.25
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1.5
    Thresholding method:Robust Background

ConvertObjectsToImage:[module_num:14|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
    Select the input objects:IdentifySecondaryObjects
    Name the output image:NucleiImage
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cell_original
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Elsewhere...|/home/marmia/Mariam_Thesis/Evaluation_Data/Cellprofiler_predictions
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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