CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Instrument>.*)_(?P<Plate>.*)_(?P<Well>[A-Za-z][0-9]{1,2})f(?P<Site>[0-9]{1,2})d(?P<ChannelNumber>[0-2])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:Lyso_original
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Lyso_original
    Name the output image:Illum_Lyso
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:Lyso_original
    Name the output image:CorrLyso
    Select the illumination function:Illum_Lyso
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:CorrLyso
    Name the output image:Enhance_Lyso
    Select the operation:Enhance
    Feature size:6
    Feature type:Speckles
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    Speed and accuracy:Fast
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
Smooth:[module_num:8|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
    Select the input image:Enhance_Lyso
    Name the output image:SmoothLyso1
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2.0
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:SmoothLyso1
    Name the output image:Enhance2_Lyso
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Fast
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
Smooth:[module_num:10|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
    Select the input image:Enhance2_Lyso
    Name the output image:SmoothLyso2
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:1.0
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:SmoothLyso2
    Name the primary objects to be identified:IdentifyPrimaryObjects_LYSO
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:15
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ExpandOrShrinkObjects:[module_num:12|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enabled:False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
    Select the input objects:IdentifyPrimaryObjects_LYSO
    Name the output objects:ShrunkenLyso
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Lyso_original
    Name the output image:OrigOverlay_Lyso
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:IdentifyPrimaryObjects_LYSO

ConvertObjectsToImage:[module_num:14|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
    Select the input objects:IdentifyPrimaryObjects_LYSO
    Name the output image:Lyso_Image
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:Lyso_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:Lyso_original
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Elsewhere...|/home/marmia/Mariam_Thesis/Evaluation_Data/Cellprofiler_predictions
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:16|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enabled:False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
    Select object sets to measure:IdentifyPrimaryObjects_LYSO
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:17|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifyPrimaryObjects_LYSO|AreaShape_Zernike_9_1,IdentifyPrimaryObjects_LYSO|AreaShape_Zernike_9_5,IdentifyPrimaryObjects_LYSO|AreaShape_Zernike_9_9,IdentifyPrimaryObjects_LYSO|AreaShape_Zernike_9_7,IdentifyPrimaryObjects_LYSO|AreaShape_Zernike_9_3,IdentifyPrimaryObjects_LYSO|AreaShape_Zernike_8_8,IdentifyPrimaryObjects_LYSO|AreaShape_Zernike_8_0,IdentifyPrimaryObjects_LYSO|AreaShape_Zernike_8_6,IdentifyPrimaryObjects_LYSO|AreaShape_Zernike_8_4,IdentifyPrimaryObjects_LYSO|AreaShape_Zernike_8_2,IdentifyPrimaryObjects_LYSO|AreaShape_Zernike_7_5,IdentifyPrimaryObjects_LYSO|AreaShape_Zernike_7_1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:LysoArea_CPseg_C01
    Overwrite existing files without warning?:No
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