CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Instrument>.*)_(?P<Plate>.*)_(?P<Well>[A-Za-z][0-9]{1,2})f(?P<Site>[0-9]{1,2})d(?P<ChannelNumber>[0-2])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "0")
    Name to assign these images:Nuclei_original
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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enabled:False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
    Select the input image:Nuclei_original
    Name the output image:Illum_Nuclei
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:6|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enabled:False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
    Select the input image:Nuclei_original
    Name the output image:Corr_Nuclei
    Select the illumination function:Illum_Nuclei
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:Nuclei_original
    Name the output image:Enhance_Nuclei
    Select the operation:Enhance
    Feature size:100
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Enhance_Nuclei
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):16,20000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:30
    Suppress local maxima that are closer than this minimum allowed distance:13
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.3
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0.028,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output image:MaskedNuclei
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:MaskedNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Nuclei_original
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Elsewhere...|/home/marmia/Mariam_Thesis/Evaluation_Data/Cellprofiler_predictions
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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